PsychoPy2experiment version="3.0.0b12"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = black
  expName = emoreg_test
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Routines
  Routine cue
    CodeComponent cue_instruction_code
      Code Type = Py
      Begin Routine:
        if instruction == "LOOK":
            win.setColor('green')  # or 'blue' or whatever
        elif instruction == "DECREASE":
            win.setColor('blue')
    TextComponent cue_instruction
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $instruction
  Routine image
    ImageComponent show_image
      image [set every repeat] = $image
      size = (1.75,1.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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  Routine rate
    CodeComponent rate_code
      Code Type = Py
      Begin Routine:
        win.setColor('black')
    TextComponent text1
      letterHeight = 0.1
      pos = (0, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = How negative do you feel?
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    TextComponent text2
      letterHeight = 0.1
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        1...........2...........3...........4...........5
        Not              Moderate             Very
        At All                                       Much
    KeyboardComponent emo_rating
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      store = first key
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  Routine rest
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rest_duration
  Routine wait_for_scanner
    KeyboardComponent scanner_trigger
      allowedKeys = 'asciicircum'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      syncScreenRefresh = False
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    TextComponent waiting_for_scanner_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = waiting for scanner ...
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  Routine look_instructions
    CodeComponent look_setColor
      Code Type = Py
      Begin Routine:
        win.setColor('green')
    TextComponent look_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = LOOK = pay attention to the picture and allow yourself to respond naturally to it
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    KeyboardComponent look_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine decrease_instructions
    CodeComponent decrease_setColor
      Code Type = Py
      Begin Routine:
        win.setColor('blue')
    TextComponent decrease_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = DECREASE = think of something to tell yourself about the picture that makes you feel less negative
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    KeyboardComponent decrease_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine rate_instructions
    CodeComponent rate_setColor
      Code Type = Py
      Begin Routine:
        win.setColor('black')
    TextComponent rate_text
      letterHeight = 0.1
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = After each picture is presented, please rate how negative you feel according to the following scale:
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    TextComponent text
      letterHeight = 0.1
      pos = (0, -.1)
      startVal [time (s)] = 0.0
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      text:
        1...........2...........3...........4...........5
        Not              Moderate             Very
        At All                                       Much
    KeyboardComponent rate_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ready
    TextComponent ready_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press your thumb when you are ready to begin.
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    KeyboardComponent ready_end
      allowedKeys = '1','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine look_instructions
  Routine decrease_instructions
  Routine rate_instructions
  Routine ready
  Routine wait_for_scanner
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ../emoreg/emoreg_procedure_list.csv
    loopType = sequential
    nReps = 45
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    conditions:
      [OrderedDict([('trialnum', 1), ('instruction', 'LOOK'), ('condition_num', 2), ('valence', 'negative'), ('image', '3350.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 2), ('instruction', 'DECREASE'), ('condition_num', 3), ('valence', 'negative'), ('image', '9250.bmp'), ('rest_duration', 1)]),
      OrderedDict([('trialnum', 3), ('instruction', 'LOOK'), ('condition_num', 2), ('valence', 'negative'), ('image', '3120.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 4), ('instruction', 'LOOK'), ('condition_num', 1), ('valence', 'neutral'), ('image', '7550.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 5), ('instruction', 'DECREASE'), ('condition_num', 3), ('valence', 'negative'), ('image', '9420.bmp'), ('rest_duration', 1)]),
      OrderedDict([('trialnum', 6), ('instruction', 'DECREASE'), ('condition_num', 3), ('valence', 'negative'), ('image', '3230.bmp'), ('rest_duration', 1)]),
      OrderedDict([('trialnum', 7), ('instruction', 'LOOK'), ('condition_num', 1), ('valence', 'neutral'), ('image', '2595.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 8), ('instruction', 'LOOK'), ('condition_num', 2), ('valence', 'negative'), ('image', '9414.bmp'), ('rest_duration', 1)]),
      OrderedDict([('trialnum', 9), ('instruction', 'LOOK'), ('condition_num', 2), ('valence', 'negative'), ('image', '3051.bmp'), ('rest_duration', 3)]),
      OrderedDict([('trialnum', 10), ('instruction', 'LOOK'), ('condition_num', 1), ('valence', 'neutral'), ('image', '2102.bmp'), ('rest_duration', 1)])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
    Routine cue
    Routine image
    Routine rate
    Routine rest
  LoopTerminator trials
